PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'handedness': u'', u'session': u'', u'participant': u'', u'sex': u''}
  Units = use prefs
  Window size (pixels) = [1600, 900]
  Full-screen window = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = textInputTest
  Screen = 1
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Routines
  Routine begin
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        你准备好开始了吗？

        准备好后按空格键
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine welcome
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text_welcome
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        您好!
        請按空白鍵繼續。
    KeyboardComponent key_resp_welcome
      forceEndRoutine = True
      allowedKeys = 'space', ' '
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      text = 實驗結束，謝謝您的參與！
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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  Routine instruction
    TextComponent text_instruction
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        在每一題中，您會聽到一個中文詞，請您：
        1. 決定您是否理解這個詞。
        2. 打出這個詞。
        請按空白鍵繼續。
    KeyboardComponent key_resp_instruction
      forceEndRoutine = True
      allowedKeys = 'space', ' '
      startVal [time (s)] = 0.0
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  Routine sound_stimuli
    TextComponent text_fixation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_sound
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    SoundComponent sound_test
      sound [set every repeat] = $file
      startVal [time (s)] = 0.5
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  Routine gatherText
    CodeComponent code
      Begin Experiment:
        inputText = u""
      Begin Routine:
        theseKeys=u""
        shift_flag = False
        text_type.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == u'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == u'backspace':
                inputText = inputText[:-1]  # lose the final character

            elif theseKeys[i] == u'space':
                inputText += ' '

            else:
                if len(theseKeys[i]) == 1:
                    inputText += theseKeys[i]

            i += 1
    TextComponent text_type
      text [set every frame] = $('What did you hear?\n' + inputText)
      pos = [-0.5, 0]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent key_resp_type
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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Flow
  Routine welcome
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': u'\u6642\u5019', 'file': u'stimuli/154.wav', 'word_id': 154},
      {'word': u'\u7136\u5f8c', 'file': u'stimuli/489.wav', 'word_id': 489},
      {'word': u'\u7684', 'file': u'stimuli/440.wav', 'word_id': 440},
      {'word': u'\u8b8a\u5f97', 'file': u'stimuli/236.wav', 'word_id': 236},
      {'word': u'\u51fa\u4f86', 'file': u'stimuli/184.wav', 'word_id': 184},
      {'word': u'\u5c31\u662f', 'file': u'stimuli/114.wav', 'word_id': 114},
      {'word': u'\u5c31\u662f', 'file': u'stimuli/366.wav', 'word_id': 366},
      {'word': u'\u554a', 'file': u'stimuli/441.wav', 'word_id': 441},
      {'word': u'\u4ee5\u5f8c', 'file': u'stimuli/462.wav', 'word_id': 462},
      {'word': u'\u8aaa', 'file': u'stimuli/123.wav', 'word_id': 123}]
    Routine sound_stimuli
    Routine gatherText
  LoopTerminator trials
  Routine begin
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word': u'\u807d', 'file': u'stimuli/44.wav', 'word_id': 44},
      {'word': u'\u662f', 'file': u'stimuli/14.wav', 'word_id': 14},
      {'word': u'\u500b', 'file': u'stimuli/172.wav', 'word_id': 172},
      {'word': u'\u4ec0\u9ebc', 'file': u'stimuli/378.wav', 'word_id': 378},
      {'word': u'mm', 'file': u'stimuli/289.wav', 'word_id': 289},
      {'word': u'\u5b57', 'file': u'stimuli/408.wav', 'word_id': 408},
      {'word': u'\u53ef\u662f', 'file': u'stimuli/100.wav', 'word_id': 100},
      {'word': u'eh', 'file': u'stimuli/333.wav', 'word_id': 333},
      {'word': u'\u6bcf', 'file': u'stimuli/320.wav', 'word_id': 320},
      {'word': u'mm', 'file': u'stimuli/38.wav', 'word_id': 38},
      {'word': u'\u6bd4\u8f03', 'file': u'stimuli/477.wav', 'word_id': 477},
      {'word': u'\u7136\u5f8c', 'file': u'stimuli/47.wav', 'word_id': 47},
      {'word': u'\u6839\u672c', 'file': u'stimuli/274.wav', 'word_id': 274},
      {'word': u'\u883b', 'file': u'stimuli/280.wav', 'word_id': 280},
      {'word': u'\u65e5\u672c\u4eba', 'file': u'stimuli/240.wav', 'word_id': 240},
      {'word': u'\u500b', 'file': u'stimuli/10.wav', 'word_id': 10},
      {'word': u'\u5c0d', 'file': u'stimuli/110.wav', 'word_id': 110},
      {'word': u'\u4f86', 'file': u'stimuli/94.wav', 'word_id': 94},
      {'word': u'\u7684', 'file': u'stimuli/336.wav', 'word_id': 336},
      {'word': u'\u672c\u4f86', 'file': u'stimuli/480.wav', 'word_id': 480},
      {'word': u'\u932f', 'file': u'stimuli/381.wav', 'word_id': 381},
      {'word': u'\u4eba\u5bb6', 'file': u'stimuli/464.wav', 'word_id': 464},
      {'word': u'\u5566', 'file': u'stimuli/469.wav', 'word_id': 469}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
    Routine sound_stimuli
    Routine gatherText
  LoopTerminator trials_2
  Routine end
